PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = minitest
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text = X
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.4
      storeCorrect = True
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    ImageComponent image
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 1.5
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $word
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'image': 'images/apple.jpg', 'word': 'apple', 'corrAns': 'right'},
      {'image': 'images/pear.jpg', 'word': 'pear', 'corrAns': 'right'},
      {'image': 'images/teddy.jpg', 'word': 'teddy', 'corrAns': 'right'},
      {'image': 'images/apple.jpg', 'word': 'pear', 'corrAns': 'left'},
      {'image': 'images/pear.jpg', 'word': 'teddy', 'corrAns': 'left'},
      {'image': 'images/teddy.jpg', 'word': 'apple', 'corrAns': 'left'}]
    Routine trial
  LoopTerminator trials
